PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[0.004,0.004,0.004]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = gloopPresentation
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $imagePath
      size = [400, 400]
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    TextComponent sentPrompt
      color = black
      text [set every repeat] = "Is the sphere " + $sphereColor + "?"
      pos = [0, -.3]
      units = height
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent instructions
      color = black
      text = Press f for yes and j for no
      pos = [0, -.35]
      units = height
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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    KeyboardComponent key_resp_2
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text
      color = Black
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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      text:
        Welcome to the experiment!

        Today you will press buttons.

        Press any button to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = gloopParameters.xlsx
    loopType = random
    nReps = 1
    Selected rows = 1:
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    conditions:
      [{u'correctAns': u'f', u'imagePath': u'imagesDK/025-blue.jpg', u'sphereColor': u'blue'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/025-red.jpg', u'sphereColor': u'red'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/025-green.jpg', u'sphereColor': u'green'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/025-purple.jpg', u'sphereColor': u'purple'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/2550-blue.jpg', u'sphereColor': u'blue'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/2550-red.jpg', u'sphereColor': u'red'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/2550-green.jpg', u'sphereColor': u'green'},
      {u'correctAns': u'f', u'imagePath': u'imagesDK/2550-purple.jpg', u'sphereColor': u'purple'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/5075-blue.jpg', u'sphereColor': u'blue'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/5075-red.jpg', u'sphereColor': u'red'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/5075-green.jpg', u'sphereColor': u'green'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/5075-purple.jpg', u'sphereColor': u'purple'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/75-blue.jpg', u'sphereColor': u'blue'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/75-red.jpg', u'sphereColor': u'red'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/75-green.jpg', u'sphereColor': u'green'},
      {u'correctAns': u'j', u'imagePath': u'imagesDK/75-purple.jpg', u'sphereColor': u'purple'}]
    Routine trial
  LoopTerminator trials
